opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Test qPCR setup script_v1
author: Max Benjamin
description: Test qPCR setup protocol to see what 384w qPCR setup might look like in the protocol designer.
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_multi_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  MM source plate: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: 3}
  destination plate: {definitionId: custom_beta/appliedbiosystemsmicroamp384wellplate40l_384_wellplate_40ul/1, slot: 6}
  plate q1: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 4}
  plate q3: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 1}
  plate q4: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 2}
  plate q2: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 5}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 7}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 8}
  Opentrons 96 Tip Rack 20 µL (2): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 9}
  Opentrons 96 Tip Rack 20 µL (3): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 10}
  Opentrons 96 Tip Rack 20 µL (4): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 11}
pipetteTiprackAssignments:
  p20_multi_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Luna® Universal qPCR Master Mix: {description: Product Link: https://www.neb.com/products/m3003-luna-universal-qpcr-master-mix#Product%20Information}
  - RNA: {description: Dilute, normalized RNA samples., serialize: true}
ingredLocations:
  MM source plate:
    Luna® Universal qPCR Master Mix {volume: 1000}: A1-H1, A2-H2
  plate q3:
    RNA {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  plate q4:
    RNA {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  plate q2:
    RNA {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  plate q1:
    RNA {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  stepDetails: Column 1 source to Quadrant 1 / Quadrant 2 destination
  pipette: p20_multi_gen2
  volume: 15
  path: single
  changeTip: once
  aspirate_labware: MM source plate
  aspirate_wells: A1
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  dispense_labware: destination plate
  dispense_wells: A1-A24
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  stepDetails: Column 1 source to Quadrant 3 / Quadrant 4 destination
  pipette: p20_multi_gen2
  volume: 15
  path: single
  changeTip: once
  aspirate_labware: MM source plate
  aspirate_wells: A2
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  dispense_labware: destination plate
  dispense_wells: B1-B24
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: plate q1
  aspirate_wells: A1-A12
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  dispense_labware: destination plate
  dispense_wells: A1, A3, A5, A7, A9, A11, A13, A15, A17, A19, A21, A23
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: plate q2
  aspirate_wells: A1-A12
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  dispense_labware: destination plate
  dispense_wells: A2, A4, A6, A8, A10, A12, A14, A16, A18, A20, A22, A24
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: plate q3
  aspirate_wells: A1-A12
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  dispense_labware: destination plate
  dispense_wells: B1, B3, B5, B7, B9, B11, B13, B15, B17, B19, B21, B23
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: plate q4
  aspirate_wells: A1-A12
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  dispense_labware: destination plate
  dispense_wells: B2, B4, B6, B8, B10, B12, B14, B16, B18, B20, B22, B24
labwareDefinitions:
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  custom_beta/appliedbiosystemsmicroamp384wellplate40l_384_wellplate_40ul/1:
    brand: {brand: Applied Biosystems MicroAmp 384 Well Plate 40 µL, brandId: [4309849, 4326270, 4343814]}
    metadata: {displayName: Test 384w Plate #1, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.8, yDimension: 85.5, zDimension: 9.7}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: appliedbiosystemsmicroamp384wellplate40l_384_wellplate_40ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.09, totalLiquidVolume: 40, shape: circular, diameter: 3.17, x: 12.15, y: 76.5, z: 0.61}
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commands:
- pickUpTip: {pipette: p20_multi_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_multi_gen2, volume: 15, labware: MM source plate, well: A1, offsetFromBottomMm: 1, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 15, labware: MM source plate, well: A1, offsetFromBottomMm: 1, flowRate: 7.6}
- aspirate: {pipette: p20_multi_gen2, volume: 15, labware: MM source plate, well: A1, offsetFromBottomMm: 1, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 15, labware: destination plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 7.6}
- blowout: {pipette: p20_multi_gen2, labware: destination plate, well: A1, flowRate: 7.6, offsetFromBottomMm: 9.09}
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